opentrons/protocol-designer 3.0.8
schemaVersion: 3
protocolName: Full plate DNA quant
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi: {mount: left}
  p10_multi: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 1}
  Opentrons 96 Filter Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_filtertiprack_10ul/1, slot: 2}
  Source: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 6}
  Assay: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 5}
  Samples: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 4}
pipetteTiprackAssignments:
  p300_multi: opentrons/opentrons_96_filtertiprack_200ul/1
  p10_multi: opentrons/opentrons_96_filtertiprack_10ul/1
ingredients:
  - Promega QuantiFlour working reagent
  - Sample: {serialize: true}
ingredLocations:
  Source:
    Promega QuantiFlour working reagent {volume: 12000}: A1
  Samples:
    Sample {volume: 20}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 95
  path: multiDispense
  changeTip: once
  aspirate_labware: Source
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Assay
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: Assay
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
  preWetTip: true
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_multi, labware: Opentrons 96 Filter Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p300_multi, volume: 200, labware: Source, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_multi, volume: 95, labware: Assay, well: A1, offsetFromBottomMm: 0.5, flowRate: 300}
- dispense: {pipette: p300_multi, volume: 95, labware: Assay, well: A2, offsetFromBottomMm: 0.5, flowRate: 300}
- blowout: {pipette: p300_multi, labware: Source, well: A1, flowRate: 300, offsetFromBottomMm: 26.85}
- aspirate: {pipette: p300_multi, volume: 200, labware: Source, well: A1, offsetFromBottomMm: 1, flowRate: 150}
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